<?xml version="1.0" encoding="utf-8"?>
<MethodSet>
  <PreMethod methodName="ABL_START_25" creator="Jonathan Ramos Acaro" description="PCR program for ABL library prep for SP100" dateTime="2025-05-09T11:40:26.4729341+02:00">
    <TargetBlockTemperature>25</TargetBlockTemperature>
    <TargetLidTemp>75</TargetLidTemp>
  </PreMethod>
  <Method methodName="ABL_25-4" creator="Jonathan Ramos Acaro" dateTime="2025-05-09T11:40:48.0135722+02:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>1</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>25</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>0.75</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>0</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>0.23</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>10</PlateauTime>
      <OverShootSlope1>0.23</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="ABL_MGISP100_Ligation_reaction" creator="Jonathan Ramos Acaro" description="Ligation thermal cycler program for ABL genetic kit implmenented in MGISP100" dateTime="2025-05-23T12:49:57.7717728+02:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>2</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>4</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>300</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>0.18</Slope>
      <PlateauTemperature>10</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>0.18</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>0</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="ABL_MGISP100_Library_amplification_8" creator="Jonathan Ramos Acaro" description="ABL Reagent kit thermal cycler program for library amplification, 8 cycles. " dateTime="2025-05-14T22:48:23.3528217+02:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>1</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>4</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>95</PlateauTemperature>
      <PlateauTime>180</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>7</OverShootTemperature>
      <OverShootTime>6</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>98</PlateauTemperature>
      <PlateauTime>20</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>15</PlateauTime>
      <OverShootSlope1>2</OverShootSlope1>
      <OverShootTemperature>4.6</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>72</PlateauTemperature>
      <PlateauTime>30</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>9</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>2</GotoNumber>
      <LoopNumber>8</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>5</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>72</PlateauTemperature>
      <PlateauTime>300</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>6</Number>
      <Slope>2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>0</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>7</Number>
      <Slope>1.3</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>0</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>8</Number>
      <Slope>0.75</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>0</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>9</Number>
      <Slope>0.23</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>10</PlateauTime>
      <OverShootSlope1>0.23</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="ABL_MGISP100_Enzymatic_Fragmentation" creator="Jonathan Ramos Acaro" description="ABL kit program for thermal cycler for fragmentation in MGISP100" dateTime="2025-05-09T11:41:21.858212+02:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>1</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>4</StartBlockTemperature>
    <StartLidTemperature>75</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>37</PlateauTemperature>
      <PlateauTime>720</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>11.8</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>75</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>65</PlateauTemperature>
      <PlateauTime>1800</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>11.4</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>75</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>0</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>75</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>1.3</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>0</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>75</LidTemp>
    </Step>
    <Step>
      <Number>5</Number>
      <Slope>0.75</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>0</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>75</LidTemp>
    </Step>
    <Step>
      <Number>6</Number>
      <Slope>0.23</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>10</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>75</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
</MethodSet>